PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1280,1024]
  expName = AO_human_v_robot
  keyboardBackend = ioHub
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Routines
  Routine stimLoader
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    CodeComponent codeLoader
      Code Type = Py
      Begin Experiment:
        blockList = [];
        conditionList = [];
        stimList = [];
        stimDirList=[];
        catchtrialObjList = [];
        markerValList = [];

        N_block = 8
      Begin Routine:
        blockList.append(blockNumber);
        stimList.append(stimulus);
        conditionList.append(condition);
        stimDirList.append(stimDir);

        catchtrialObjList.append(catchtrialObj);
        markerValList.append(markerVal);
  Routine welcomeScreen
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    CodeComponent codeSetup
      Code Type = Py
      Before Experiment:
        from collections import Counter
      Begin Experiment:
        #blockLenList = []
      Begin Routine:
        counts = Counter(blockList)

        countBlockList = [counts[i] for i in range(N_block)] # count the number of trials within each block
        print('=*'*50)
        print(countBlockList)

        #print(catchtrialObjList)
    TextComponent textWelcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        Press Space to start the experiment
    KeyboardComponent keyWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    UnknownPluginComponent cortex_rec_saved plugin="psychopy-emotiv"
      disabled = True
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      syncScreenRefresh = False
    UnknownPluginComponent cortex_rec plugin="psychopy-emotiv"
      disabled = True
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      syncScreenRefresh = False
  Routine breakPeriod
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    CodeComponent codeBreakCD
      Code Type = Py
      Begin Experiment:
        progVal = 0

        breakLength = 15 + 1
        breakCD = breakLength
      Begin Routine:
        progVal = counterBlock / N_block

        breakCD = breakCD -1
    TextComponent textBreak
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Let's have a break.

        After this break, focus on the white cross at the center.
    TextComponent textBreakCD
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $breakCD
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    ProgressComponent prog
      anchor = center left
      borderColor = white
      fillColor = None
      lineWidth = 4
      pos = (-0.3, -0.25)
      progress [set every repeat] = progVal
      size = (0.6, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = height
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    TextComponent textProg
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Your progress
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    KeyboardComponent skipBreak
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine endBlock
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    CodeComponent codeEndBlock
      Code Type = Py
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      Begin Routine:
        counterBlock += 1
      End Routine:
        breakCD = breakLength
  Routine fixationCross
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    CodeComponent codeFixation
      Code Type = Py
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      Before Experiment:
        import random
      Begin Routine:
        #fixationLen = round(random.uniform(0.5, 0.75),3)
        #fixationLen = 0.75
        fixationLen = 1
        fixationVal = 1000
        print('fixationVal: ', fixationVal)
    PolygonComponent crossFixation
      durationEstim = 1
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixationLen
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    UnknownPluginComponent fixationCrossMarker_saved plugin="psychopy-emotiv"
      disabled = True
      durationEstim = 0.75
      emotiv_marker_label = fixationCross
      emotiv_marker_value [set every repeat] = $fixationVal
      emotiv_stop_marker = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixationLen
      syncScreenRefresh = False
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    UnknownPluginComponent fixationCrossMarker plugin="psychopy-emotiv"
      disabled = True
      durationEstim = 1
      emotiv_marker_label = fixationCross
      emotiv_marker_value [set every repeat] = $fixationVal
      emotiv_stop_marker = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixationLen
      syncScreenRefresh = False
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  Routine stimVid
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    CodeComponent codeStim
      Code Type = Py
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      Begin Experiment:
        counterStim = 0
      Begin Routine:
        print('Trial number: ', counterStim)

        print(stimDirList[counterStim])
        print('stim marker val: ', markerValList[counterStim])
      End Routine:
        counterStim += 1
    MovieComponent stimMovie
      No audio = True
      backend = ffpyplayer
      durationEstim = 4.5
      forceEndRoutine = True
      movie [set every repeat] = $stimDirList[counterStim]
      size = (1.125, 0.63)
      startVal [time (s)] = 0.0
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    KeyboardComponent skipStim
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.5
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    UnknownPluginComponent stimMarker_save plugin="psychopy-emotiv"
      disabled = True
      durationEstim = 4.5
      emotiv_marker_label [set every repeat] = $stimList[counterStim]
      emotiv_marker_value [set every repeat] = $markerValList[counterStim]
      emotiv_stop_marker = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.4
      syncScreenRefresh = False
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    UnknownPluginComponent stimMarker plugin="psychopy-emotiv"
      disabled = True
      durationEstim = 4.5
      emotiv_marker_label [set every repeat] = $stimList[counterStim]
      emotiv_marker_value [set every repeat] = $markerValList[counterStim]
      emotiv_stop_marker = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.4
      syncScreenRefresh = False
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  Routine interTrialInterval
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    CodeComponent codeITI
      Code Type = Py
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      Begin Routine:
        itiLen = round(random.uniform(3.5, 4), 3)
        itiVal = 3000
        print('-*'*100)
        print('itiVal: ', itiVal)
    TextComponent textITI
      disabled = True
      durationEstim = 3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $itiLen
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      text:
        InterTrial interval

        (text to be disabled)
    KeyboardComponent skipITI
      allowedKeys = 's'
      durationEstim = 3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $itiLen
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    UnknownPluginComponent ITImarker_saved plugin="psychopy-emotiv"
      disabled = True
      durationEstim = 3
      emotiv_marker_label = intertrial_interval
      emotiv_marker_value [set every repeat] = $itiVal
      emotiv_stop_marker = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $itiLen
      syncScreenRefresh = False
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    UnknownPluginComponent ITImarker plugin="psychopy-emotiv"
      disabled = True
      durationEstim = 3
      emotiv_marker_label = intertrial_interval
      emotiv_marker_value [set every repeat] = $itiVal
      emotiv_stop_marker = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $itiLen
      syncScreenRefresh = False
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  Routine blockSetup
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    CodeComponent codeBlockSetup
      Code Type = Py
      Begin Experiment:
        counterBlock = 0
      Begin Routine:
        N_trial = countBlockList[counterBlock]
        print('=*'*50)
        print("Block: ", counterBlock)
        print('Number of trials: ', N_trial)

        if counterBlock == int(N_block/2):
            breakLength = 300 + 1
        else:
            breakLength = 15 + 1

        breakCD = breakLength
  Routine catchtrialQues
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    CodeComponent codeCatchtrial
      Code Type = Py
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      Begin Routine:
        if conditionList[counterStim-1] != 'catch':
            continueRoutine = False
        else:
            print("There's a catchtrial here")

        objectList = ["Cup", "Hammer", "Toothbrush", "Pencil", "Fork"]
        if catchtrialObjList[counterStim-1] == "none":
            ansNeg = randchoice(objectList)
            ansAffirm = "None"
        else:
            objId = int(catchtrialObjList[counterStim-1][-1])
            print(catchtrialObjList[counterStim-1])
            print(objId)
            ansAffirm = objectList[objId]
            objectList.pop(objId)
            ansNeg = randchoice(objectList)


        #Randomize answer's position and key response
        posLeft = (-0.4, -0.1)
        posRight = (0.4, -0.1)
        keyNeg = randchoice(['left', 'right'])
        if keyNeg == 'left':
            posAnsNeg = posLeft

            keyAffirm = 'right'
            posAnsAffirm = posRight
        else :
            posAnsNeg = posRight

            keyAffirm = 'left'
            posAnsAffirm = posLeft

        #print('keyAffirm: ', keyAffirm)
    TextComponent textQues
      letterHeight = 0.05
      pos = (0, .25)
      startVal [time (s)] = 0.0
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      text:
        In the previous clip,

        which object

        does the actor use?
    TextComponent textAnsAffirm
      letterHeight = 0.05
      pos [set every repeat] = posAnsAffirm
      startVal [time (s)] = 0.0
      text [set every repeat] = $ansAffirm
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    TextComponent textAnsNeg
      letterHeight = 0.05
      pos [set every repeat] = posAnsNeg
      startVal [time (s)] = 0.0
      text [set every repeat] = $ansNeg
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    KeyboardComponent keyRespAffirm
      allowedKeys [set every repeat] = $keyAffirm
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    KeyboardComponent keyRespNeg
      allowedKeys [set every repeat] = $keyNeg
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent textNoAnswer
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = I don't know
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    KeyboardComponent keyRespNoAnswer
      allowedKeys = 'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine postStimInterval
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    CodeComponent codePostStim
      Code Type = Py
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      Begin Routine:
        if counterStim < N_trial:
            continueRoutine = False
    TextComponent textITI2
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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      text:
        InterTrial interval

        (text to be disabled)
  Routine endExperiment
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    TextComponent textEnd
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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      text:
        This is the end of the experiment.

        Thank you for your effort and attention!

        Press Space to quit.
    KeyboardComponent keyQuit
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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  Routine markCTanswer
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    CodeComponent codeGetAnswer
      Code Type = Py
      Begin Experiment:
        answerCTVal = 0
      Begin Routine:
        if conditionList[counterStim-1] != 'catch':
            continueRoutine = False
            keyPressed = ""
            statusPress = ""
            answerCTVal = 0
        else:
            keyPressed = event.getKeys()
            print(keyPressed)
            if keyPressed == []:
                keyPressed = 'none'
            else:
                keyPressed = str(keyPressed[-1])

            keyAffirm = str(keyAffirm[0])
            print('keyPressed: ', keyPressed)
            print('keyAffirm: ', keyAffirm)
            if keyPressed == str(keyAffirm):
                statusPress = "Correct!"
                answerCTVal = 201
            else:
                statusPress = "Incorrect!"
                answerCTVal = 200
            print('statusPress: ', statusPress)
            print('answerCTVal: ', answerCTVal)
    TextComponent textShowAnswer
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $'You pressed: ' + str(keyPressed) + '. ' + str(statusPress)
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    UnknownPluginComponent CTmarker_saved plugin="psychopy-emotiv"
      disabled = True
      durationEstim = 0.01
      emotiv_marker_label = answerCT
      emotiv_marker_value [set every repeat] = $answerCTval
      emotiv_stop_marker = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      syncScreenRefresh = False
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    UnknownPluginComponent CTmarker plugin="psychopy-emotiv"
      disabled = True
      durationEstim = 0.01
      emotiv_marker_label = answerCT
      emotiv_marker_value [set every repeat] = $answerCTVal
      emotiv_stop_marker = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      syncScreenRefresh = False
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Flow
  LoopInitiator loopLoader loopType="TrialHandler"
    conditionsFile = trial_files/AO_final_randomized_trials.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'blockNumber': 0, 'condition': 'catch', 'stimulus': None, 'stimValue': None, 'stimLabel': None, 'stimDir': './stimuli/human_right_1_f.mp4', 'markerVal': 100, 'catchtrialObj': 'none'},
      {'blockNumber': 0, 'condition': 'catch', 'stimulus': None, 'stimValue': None, 'stimLabel': None, 'stimDir': './stimuli/obj_2.mp4', 'markerVal': 100, 'catchtrialObj': 'obj_2'},
      {'blockNumber': 0, 'condition': 'catch', 'stimulus': None, 'stimValue': None, 'stimLabel': None, 'stimDir': './stimuli/human_right_4_m.mp4', 'markerVal': 100, 'catchtrialObj': 'none'},
      {'blockNumber': 0, 'condition': 'robot_right', 'stimulus': 'robot_right_1', 'stimValue': 1, 'stimLabel': 'forward-backward swing', 'stimDir': './stimuli/robot_right_1.mp4', 'markerVal': 41, 'catchtrialObj': 'none'},
      {'blockNumber': 0, 'condition': 'control', 'stimulus': 'control_2', 'stimValue': 2, 'stimLabel': 'Landscape 3', 'stimDir': './stimuli/control_2.mp4', 'markerVal': 52, 'catchtrialObj': 'none'},
      {'blockNumber': 0, 'condition': 'robot_right', 'stimulus': 'robot_right_3', 'stimValue': 3, 'stimLabel': 'overhead arm raise', 'stimDir': './stimuli/robot_right_3.mp4', 'markerVal': 43, 'catchtrialObj': 'none'},
      {'blockNumber': 0, 'condition': 'robot_right', 'stimulus': 'robot_right_4', 'stimValue': 4, 'stimLabel': 'waving', 'stimDir': './stimuli/robot_right_4.mp4', 'markerVal': 44, 'catchtrialObj': 'none'}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
    Routine stimLoader
  LoopTerminator loopLoader
  Routine welcomeScreen
  LoopInitiator loopBlock loopType="TrialHandler"
    loopType = sequential
    nReps = N_block
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    Routine blockSetup
    LoopInitiator loopBreakCD loopType="TrialHandler"
      loopType = sequential
      nReps = breakLength
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      Routine breakPeriod
    LoopTerminator loopBreakCD
    LoopInitiator loopTrial loopType="TrialHandler"
      loopType = sequential
      nReps = N_trial
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      Routine interTrialInterval
      Routine fixationCross
      Routine stimVid
      Routine catchtrialQues
      Routine markCTanswer
      Routine postStimInterval
    LoopTerminator loopTrial
    Routine endBlock
  LoopTerminator loopBlock
  Routine endExperiment
