PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = practice-session
  keyboardBackend = ioHub
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Routines
  Routine startScreen
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    TextComponent textWelcome
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Welcome to the study and

        Thank you for your participation!



        Reminder, your participation is voluntary.



        Let's now prepare for the experiments!

        Press Space to continue >>>
    KeyboardComponent keySkipWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine putOnEEG
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    TextComponent textEEGsetup
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Let's prepare to place the EEG headset on you.

        We need to make sure we have good contact quality.



        Next, please fixate on a cross centered on the screen >>>
    KeyboardComponent keySkipEEGsetup
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine checkEEGquality
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    PolygonComponent fixate2CheckEEG
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent textCheckEEG
      letterHeight = 0.05
      pos = (0, .25)
      startVal [time (s)] = 0.0
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      text:
        Fixate on the cross for few seconds

        Try not to move and not to blink
    KeyboardComponent keySkipEEGcheck
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5
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  Routine beginTraining
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    TextComponent textBeginTraining
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Let's begin the training!

        Please follow the instructions to get you used to the experiments.
    KeyboardComponent skipBeginTraining
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent codeTrainingSetup
      Code Type = Py
      Begin Experiment:
        counterStim = 0
      Begin Routine:
        stimDirList_exp = stimDirList[:N_stim]
        stimDirList_catch = stimDirList[N_stim:]
        #catchtrialObjList = catchtrialObjList[N_stim:]

        print(catchtrialObjList)
        print(stimDirList)
  Routine introExp1
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    TextComponent textIntroExp1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In Experiment 1,

        you'll be asked to OBSERVE sequences of action videos.



        In each trial, the order will be:

        Fixation Cross => Action Video => Rest



        Let's practice 1 trial!

        Press Space to continue  >>>
    KeyboardComponent skipIntro1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine loadStim
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    CodeComponent codeLoadStim
      Code Type = Py
      Begin Experiment:
        conditionList = []
        stimDirList = []
        catchtrialObjList = []

        N_stim = 10
        N_catch = 10
      Begin Routine:
        conditionList.append(condition)
        stimDirList.append(stimDir)
        catchtrialObjList.append(catchtrialObj)
  Routine fixationCross_train1
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    PolygonComponent fixationCross0
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    KeyboardComponent keySkipS
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine stimVid_train1
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    MovieComponent stimVid_train
      No audio = True
      backend = ffpyplayer
      durationEstim = 4.5
      forceEndRoutine = True
      movie [set every repeat] = $stimDirList[counterStim]
      size = (1.125, 0.63)
      startVal [time (s)] = 0.0
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    CodeComponent codeStimVid
      Code Type = Auto->JS
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      End Routine:
        counterStim += 1
    KeyboardComponent keySkipS_2
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.5
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  Routine ITI_train1
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    TextComponent ITI_train
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    KeyboardComponent keySkipS_3
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine beginTrainLoop1
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    TextComponent textBeginTrainLoop1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Let's practice with some trials!


        Press Space to start >>>
    KeyboardComponent keyBeginTrainLoop1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine endTrain1
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    TextComponent textEndTrain1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Good job!

        Let us know if you have any questions.



        If not, Press Space to continue >>>
    KeyboardComponent keyEndTrain1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine introExp2
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    TextComponent textIntroExp2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In Experiment 2,

        you'll be asked to OBSERVE action video then IMITATE the action.


        In each trial, the order will be:
        Action Video => Fixation Cross => Imitation => Rest


        Let's practice!

        Press Space to continue  >>>
    KeyboardComponent keyIntroExp2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent codeIntroExp2
      Code Type = Auto->JS
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      Begin Routine:
        counterStim = 0
  Routine introCatchtrial
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    TextComponent textIntroCT
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Also in Experiment 1,

        You will meet videos each followed by a question:

        "In the previous clip,

        which object

        does the actor use?"
    KeyboardComponent keyIntroCT
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine introCT_2
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    TextComponent textIntroCT_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        You need to select your answer

        By pressing an arrow key

        Corresponding to answers' postions on screen.
    TextComponent textLeft
      letterHeight = 0.05
      pos = (-0.4, -0.1)
      startVal [time (s)] = 0.0
      text = Left
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    TextComponent textRight
      letterHeight = 0.05
      pos = (0.4, -0.1)
      startVal [time (s)] = 0.0
      text = Right
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    TextComponent textDown
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Down
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    KeyboardComponent keyIntroCT_2
      allowedKeys = 'down','left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine beginTrainCT
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    TextComponent textBeginPracCT
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Let's practice for few trials!

        Press Space to continue >>>
    KeyboardComponent keyBeginPracCT
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine catchtrialQues
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    CodeComponent codeCatchtrial
      Code Type = Py
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      Begin Routine:
        print("There's a catchtrial here")

        objectList = ["Cup", "Hammer", "Toothbrush", "Pencil", "Fork"]
        if catchtrialObjList[counterStim-1] == "none":
            ansNeg = randchoice(objectList)
            ansAffirm = "None"
        else:
            objId = int(catchtrialObjList[counterStim-1][-1])
            print(catchtrialObjList[counterStim-1])
            print(objId)
            ansAffirm = objectList[objId]
            objectList.pop(objId)
            ansNeg = randchoice(objectList)


        #Randomize answer's position and key response
        posLeft = (-0.4, -0.1)
        posRight = (0.4, -0.1)
        keyNeg = randchoice(['left', 'right'])
        if keyNeg == 'left':
            posAnsNeg = posLeft

            keyAffirm = 'right'
            posAnsAffirm = posRight
        else :
            posAnsNeg = posRight

            keyAffirm = 'left'
            posAnsAffirm = posLeft

        #print('keyAffirm: ', keyAffirm)
    TextComponent textQues
      letterHeight = 0.05
      pos = (0, .25)
      startVal [time (s)] = 0.0
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      text:
        In the previous clip,

        which object

        does the actor use?
    TextComponent textAnsAffirm
      letterHeight = 0.05
      pos [set every repeat] = posAnsAffirm
      startVal [time (s)] = 0.0
      text [set every repeat] = $ansAffirm
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    TextComponent textAnsNeg
      letterHeight = 0.05
      pos [set every repeat] = posAnsNeg
      startVal [time (s)] = 0.0
      text [set every repeat] = $ansNeg
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    KeyboardComponent keyRespAffirm
      allowedKeys [set every repeat] = $keyAffirm
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    KeyboardComponent keyRespNeg
      allowedKeys [set every repeat] = $keyNeg
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent textNoAnswer
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = I don't know
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    KeyboardComponent keyRespNoAnswer
      allowedKeys = 'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine endTrainCT
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    TextComponent textEndTrainCT
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Great job!

        Let us know if you have any question.



        If not, Press Space to continue >>>
    KeyboardComponent keyEndTrainCT
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine executionPhase
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    PolygonComponent executionCircle
      fillColor = white
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent text
      letterHeight = 0.05
      pos = (0, .3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Imitate the last seen action

        when you see a circle.
Flow
  LoopInitiator loadStimLoop loopType="TrialHandler"
    conditionsFile = trial_files/training_randomized_trials - legacy.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'blockNumber': 4, 'condition': 'robot_right', 'stimulus': 'robot_right_3', 'stimValue': 3, 'stimLabel': 'overhead arm raise', 'stimDir': './stimuli/robot_right_3.mp4', 'markerVal': 43, 'catchtrialObj': 'none'},
      {'blockNumber': 4, 'condition': 'robot_right', 'stimulus': 'robot_right_0', 'stimValue': 0, 'stimLabel': 'air punching', 'stimDir': './stimuli/robot_right_0.mp4', 'markerVal': 40, 'catchtrialObj': 'none'},
      {'blockNumber': 6, 'condition': 'human_left', 'stimulus': 'human_left_2', 'stimValue': 2, 'stimLabel': 'medial-lateral swing', 'stimDir': './stimuli/human_left_2_f.mp4', 'markerVal': 12, 'catchtrialObj': 'none'},
      {'blockNumber': 1, 'condition': 'human_right', 'stimulus': 'human_right_0', 'stimValue': 0, 'stimLabel': 'air punching', 'stimDir': './stimuli/human_right_0_m.mp4', 'markerVal': 20, 'catchtrialObj': 'none'},
      {'blockNumber': 0, 'condition': 'human_left', 'stimulus': 'human_left_4', 'stimValue': 4, 'stimLabel': 'waving', 'stimDir': './stimuli/human_left_4_f.mp4', 'markerVal': 14, 'catchtrialObj': 'none'},
      {'blockNumber': 1, 'condition': 'robot_left', 'stimulus': 'robot_left_3', 'stimValue': 3, 'stimLabel': 'overhead arm raise', 'stimDir': './stimuli/robot_left_3.mp4', 'markerVal': 33, 'catchtrialObj': 'none'},
      {'blockNumber': 5, 'condition': 'human_left', 'stimulus': 'human_left_3', 'stimValue': 3, 'stimLabel': 'overhead arm raise', 'stimDir': './stimuli/human_left_3_f.mp4', 'markerVal': 13, 'catchtrialObj': 'none'}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
    Routine loadStim
  LoopTerminator loadStimLoop
  Routine startScreen
  Routine putOnEEG
  Routine checkEEGquality
  Routine beginTraining
  Routine introExp1
  Routine fixationCross_train1
  Routine stimVid_train1
  Routine ITI_train1
  Routine beginTrainLoop1
  LoopInitiator TrainLoop1 loopType="TrialHandler"
    loopType = sequential
    nReps = 9
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    Routine fixationCross_train1
    Routine stimVid_train1
    Routine ITI_train1
  LoopTerminator TrainLoop1
  Routine endTrain1
  Routine introCatchtrial
  Routine introCT_2
  Routine beginTrainCT
  LoopInitiator CTtrainLoop loopType="TrialHandler"
    loopType = sequential
    nReps = 10
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    Routine fixationCross_train1
    Routine stimVid_train1
    Routine catchtrialQues
    Routine ITI_train1
  LoopTerminator CTtrainLoop
  Routine endTrainCT
  Routine introExp2
  LoopInitiator trials loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = N_stim
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    Routine stimVid_train1
    Routine fixationCross_train1
    Routine executionPhase
    Routine ITI_train1
  LoopTerminator trials
  Routine endTrain1
